OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  --:: Remember to change the file
                  to the one you recorded before!
Comment
  Overview

                  This scenario should be used to train
                  the LDA classifier used to detect
                  left / right hand movements

                  Just configure the Generic Stream Reader
                  box to point to the last file you recorded with
                  scenario 1-acquisition and fast forward
                  this scenario.

                  At the end of the training, you will have an estimation
                  of the classifier performance printed in the console.
                  If this performance is lower than 65%, just run a new
                  1-acquisition session to have better results.
Comment
  New configuration for GRAZ presentation
                  so that shows the bars continiuously -
Comment
  Calculation of the control value based on the
                  new scaling algorithm
Comment
  LSL Export to the Video feedback stimulator -

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename "FC3;FC4;C5;C3;C1;C4;C6;CP3;C2;CP4;O1;O2;CH13;CH14;CH15;EMG"
  New channel names = FC3;FC4;C5;C3;C1;C4;C6;CP3;C2;CP4;O1;O2;CH13;CH14;CH15;EMG
-> Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4" => #2
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Filter 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter1.xml
-> Spatial Filter "CSP Filter 1" => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter1.cfg
#2 -> Temporal filter "Filter 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter2.xml
-> Spatial Filter "CSP Filter 2" => #6
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter2.cfg
#2 -> Temporal filter "Filter 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter3.xml
-> Spatial Filter "CSP Filter 3" => #8
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter3.cfg
#2 -> Temporal filter "Filter 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter4.xml
-> Spatial Filter "CSP Filter 4" => #10
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter4.cfg
Input 1=#4, Input 2=#6, Input 3=#8, Input 4=#10 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #16
Features=#16 -> Classifier processor => #17
  Filename to load configuration from = ${Experiment_Path}/${SubjectID}/${Session}/motor-imagery-bci-config-classifier.cfg
#17.Hyperplane distance -> Simple DSP => #18
  Equation = x
-> Calculate Control Value (GRAZ) => #19
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/graz.py
Input signal=#19.Oputput -> Export to Video Feedback
  Stream name = OpenViBE
  Stream type = OpenVibe
#19.Oputput -> Matrix Display "Display Control Value"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#19.Sampl_per_sec -> Matrix Display "Display Number of Samples per second"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = ${Experiment_Path}/${SubjectID}/${Session}/online-[$core{date}-$core{time}].gdf
Self-placed => #24
  Lua Script = ${Player_ScenarioDirectory}/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Right
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 0
  Wait For Beep Duration (in sec) = 0.000000
  Wait For Cue Duration (in sec) = 0.000000
  Display Cue Duration (in sec) = 0
  Feedback Duration (in sec) = 600
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 0
Stimulations=#24, Amplitude=#18 -> Self-placed Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
